PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = PartialReportMethod
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent generate_grid
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import string
      Begin Routine:
        # Generate 12 random letters
        letters = random.choices(string.ascii_uppercase, k=12)

        # Format the letters into a 3x4 grid
        letter_grid_text = f"{letters[0]} {letters[1]} {letters[2]} {letters[3]}\n" \
                           f"{letters[4]} {letters[5]} {letters[6]} {letters[7]}\n" \
                           f"{letters[8]} {letters[9]} {letters[10]} {letters[11]}"

        # Assign this to the text component
        letter_grid.text = letter_grid_text
    TextComponent letter_grid
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent cue_logic
      Code Type = Auto->JS
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      Begin Routine:
        # Randomly select a row to cue (0 = top, 1 = middle, 2 = bottom)
        cue_row = random.randint(0, 2)

        # Set the position of the visual cue based on the chosen row
        if cue_row == 0:
            row_cue.pos = (0, 0.2)  # Adjust Y value to point at the top row
        elif cue_row == 1:
            row_cue.pos = (0, 0)  # Adjust Y value for the middle row
        elif cue_row == 2:
            row_cue.pos = (0, -0.2)  # Adjust Y value for the bottom row
    PolygonComponent row_cue
      fillColor = white
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
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  Routine introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        A grid of letters would be presented to you momentarily, which will be followed by a cross. Your task is to report as many letters as possible corresponding to the row that the cross indicates.

        Press the space bar to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_routine
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    KeyboardComponent response
      allowedKeys = 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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    CodeComponent code
      Code Type = Auto->JS
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      End Routine:
        # Get the participant's response
        participant_response = response.keys

        # Extract letters from the cued row
        correct_row_start = cue_row * 4
        correct_row = letters[correct_row_start:correct_row_start + 4]

        # Check if the response matches the cued row's letters
        is_correct = participant_response == ''.join(correct_row)

        # Save data to the output file
        thisExp.addData('Cued Row', cue_row)
        thisExp.addData('Correct Row', ''.join(correct_row))
        thisExp.addData('Participant Response', participant_response)
        thisExp.addData('Is Correct', is_correct)
Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
    Routine response_routine
  LoopTerminator trials
