PsychoPy2experiment version="2024.1.5"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Show mouse = True
  Units = height
  Window size (pixels) = [1536, 864]
  expName = WholeReportMethod
  keyboardBackend = ioHub
  logging level = warning
  runMode = 1
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Routines
  Routine trial
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    CodeComponent generate_grid
      Code Type = Auto->JS
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      Begin Experiment:
        import random
        import string
      Begin Routine:
        # Generate 12 random letters
        letters = random.choices(string.ascii_uppercase, k=12)

        # Format the letters into a 3x4 grid
        letter_grid_text = f"{letters[0]} {letters[1]} {letters[2]} {letters[3]}\n" \
                           f"{letters[4]} {letters[5]} {letters[6]} {letters[7]}\n" \
                           f"{letters[8]} {letters[9]} {letters[10]} {letters[11]}"

        # Assign this to the text component
        letter_grid.text = letter_grid_text
    TextComponent letter_grid
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine introduction
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        A grid of letters would be presented to you momentarily. Your task is to report as many letters as possible.

        Press the space bar to begin.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine response_routine
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    KeyboardComponent response
      allowedKeys = 'a', 'b', 'c', 'd', 'e', 'f', 'g', 'h', 'i', 'j', 'k', 'l', 'm', 'n', 'o', 'p', 'q', 'r', 's', 't', 'u', 'v', 'w', 'x', 'y', 'z'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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Flow
  Routine introduction
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 100
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    Routine trial
    Routine response_routine
  LoopTerminator trials
